CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (or (file does contain ".mat") (extension does istif)) (file doesnot contain "004-")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:(?P<WellRow>[0-9]{3})[0-9](?P<WellCol>[0-9]{2})-(?P<Site>[0-9]{1,2})-[0-9]{8}(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:Z:\\\\\\\\(?P<TopFolderName>[A-Za-z0-9_]{1,99})
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'IllumTuj1': u'TopFolderName', u'Map2': u'TopFolderName', u'IllumDAPI': u'TopFolderName', u'Tuj1': u'TopFolderName', u'IllumC4': u'TopFolderName', u'DAPI': u'TopFolderName', u'IllumMap2': u'TopFolderName', u'C4': u'TopFolderName'}, {u'IllumTuj1': None, u'Map2': u'Well', u'IllumDAPI': None, u'Tuj1': u'Well', u'IllumC4': None, u'DAPI': u'Well', u'IllumMap2': None, u'C4': u'Well'}, {u'IllumTuj1': None, u'Map2': u'Site', u'IllumDAPI': None, u'Tuj1': u'Site', u'IllumC4': None, u'DAPI': u'Site', u'IllumMap2': None, u'C4': u'Site'}]
    Image set matching method:Metadata
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    Assignments count:8
    Single images count:0
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    Select the rule criteria:and (file does contain "001.tif")
    Name to assign these images:C4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "002.tif")
    Name to assign these images:Tuj1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "003.tif")
    Name to assign these images:Map2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "004.tif")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "IllumDAPI")
    Name to assign these images:IllumDAPI
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "IllumC4")
    Name to assign these images:IllumC4
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "IllumTuj1")
    Name to assign these images:IllumTuj1
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "IllumMap2")
    Name to assign these images:IllumMap2
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    Select the image type:Illumination function
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationApply:[module_num:5|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
    Select the input image:C4
    Name the output image:CorrC4
    Select the illumination function:IllumC4
    Select how the illumination function is applied:Divide
    Select the input image:DAPI
    Name the output image:CorrDAPI
    Select the illumination function:IllumDAPI
    Select how the illumination function is applied:Divide
    Select the input image:Map2
    Name the output image:CorrMap2
    Select the illumination function:IllumMap2
    Select how the illumination function is applied:Divide
    Select the input image:Tuj1
    Name the output image:CorrTuj1
    Select the illumination function:IllumTuj1
    Select how the illumination function is applied:Divide

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:CorrDAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):25,150
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
ImageMath:[module_num:7|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:Map2
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Tuj1
    Multiply the second image by:1.0
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
EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:ImageAfterMath
    Name the output image:EnhanceNeurites
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:5
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    Enhancement method:Tubeness
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
ApplyThreshold:[module_num:9|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
    Select the input image:EnhanceNeurites
    Name the output image:ThreshNeurites
    Select the output image type:Binary (black and white)
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
Morph:[module_num:10|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
    Select the input image:ThreshNeurites
    Name the output image:MorphBlue
    Select the operation to perform:close
    Number of times to repeat operation:Once
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    Diameter:20.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
MaskImage:[module_num:11|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
    Select the input image:ImageAfterMath
    Name the output image:ImageAfterMath_Masked
    Use objects or an image as a mask?:Image
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    Select image for mask:MorphBlue
    Invert the mask?:No

ApplyThreshold:[module_num:12|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
    Select the input image:ImageAfterMath_Masked
    Name the output image:Neurites_MaskedAndThreshed
    Select the output image type:Grayscale
    Set pixels below or above the threshold to zero?:Below threshold
    Subtract the threshold value from the remaining pixel intensities?:No
    Number of pixels by which to expand the thresholding around those excluded bright pixels:0.0
    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifySecondaryObjects:[module_num:13|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
    Select the input objects:Nuclei
    Name the objects to be identified:CellBodiesPlusNeurites
    Select the method to identify the secondary objects:Propagation
    Select the input image:Neurites_MaskedAndThreshed
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    Regularization factor:0
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
SaveImages:[module_num:14|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
    Select the type of image to save:Objects
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    Select the objects to save:CellBodiesPlusNeurites
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CellBodies
    Saved file format:tif
    Output file location:Default Output Folder|C:\\\\\\\\Users\\\\\\\\bcimini\\\\\\\\Desktop
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:15|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
    Select the type of image to save:Objects
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    Select the objects to save:Nuclei
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Nuclei
    Saved file format:tif
    Output file location:Default Output Folder|C:\\\\\\\\Users\\\\\\\\bcimini\\\\\\\\Desktop
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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